###############################################################################
#
#   EGS_XGI Example_Usercode_Score_Energy sample input file.
#   Copyright (C) 2020  ETH Zürich
#
#   This file is part of the EGS_XGI - an X-ray grating interferometry
#   extension for EGSnrc.
#
#   This program is free software: you can redistribute it and/or modify
#   it under the terms of the GNU Affero General Public License as published
#   by the Free Software Foundation, either version 3 of the License, or
#   (at your option) any later version.
#
#   This program is distributed in the hope that it will be useful,
#   but WITHOUT ANY WARRANTY; without even the implied warranty of
#   MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
#   GNU Affero General Public License for more details.
#
#   You should have received a copy of the GNU Affero General Public License
#   along with this program.  If not, see <https://www.gnu.org/licenses/>.
#
###############################################################################
#
#   Author:     Stefan Tessarini
#
#
#
###############################################################################

###############################################
###############################################
##					     ##
##		Geometry		     ##
##					     ##
###############################################
###############################################

:start geometry definition:
	:start view control:
		xmin = -0.002
		xmax = 0.002
		ymin = -0.003
		ymax = 0.003
		zmin = -0.003
		zmax = 0.001
	:stop view control:
	###################################
	###################################
	# Grating Wafer
	:start geometry:
		library = egs_ndgeometry
		type = EGS_XYZGeometry
		name = Grating
		x-planes= -0.1005 -0.1004 -0.1003 -0.1002 -0.1001 -0.1000 -0.0999 -0.0998 -0.0997 -0.0996 -0.0995 -0.0994 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0.1005
		y-planes= -0.0505 0.0505
		z-planes= -0.0250 0.0 0.0025
		:start media input:
			media = SI521ICRU AIR521ICRU Silicon521
			set medium = 0 2009 0
			set medium = 2010 1
			set medium = 2011 2
			set medium = 2012 1
			set medium = 2013 2
			set medium = 2014 1
			set medium = 2015 2
			set medium = 2016 1
			set medium = 2017 2
			set medium = 2018 1
			set medium = 2019 2
			set medium = 2020 1
			set medium = 2021 2
			set medium = 2022 1
			set medium = 2023 2
			set medium = 2024 1
			set medium = 2025 2
			set medium = 2026 1
			set medium = 2027 2
			set medium = 2028 1
			set medium = 2029 2
			set medium = 2030 1
			set medium = 2031 2
			set medium = 2032 1
			set medium = 2033 2
			set medium = 2034 1
			set medium = 2035 2
			set medium = 2036 1
			set medium = 2037 2
			set medium = 2038 1
			set medium = 2039 2
			set medium = 2040 1
			set medium = 2041 2
			set medium = 2042 1
			set medium = 2043 2
			set medium = 2044 1
			set medium = 2045 2
			set medium = 2046 1
			set medium = 2047 2
			set medium = 2048 1
			set medium = 2049 2
			set medium = 2050 1
			set medium = 2051 2
			set medium = 2052 1
			set medium = 2053 2
			set medium = 2054 1
			set medium = 2055 2
			set medium = 2056 1
			set medium = 2057 2
			set medium = 2058 1
			set medium = 2059 2
			set medium = 2060 1
			set medium = 2061 2
			set medium = 2062 1
			set medium = 2063 2
			set medium = 2064 1
			set medium = 2065 2
			set medium = 2066 1
			set medium = 2067 2
			set medium = 2068 1
			set medium = 2069 2
			set medium = 2070 1
			set medium = 2071 2
			set medium = 2072 1
			set medium = 2073 2
			set medium = 2074 1
			set medium = 2075 2
			set medium = 2076 1
			set medium = 2077 2
			set medium = 2078 1
			set medium = 2079 2
			set medium = 2080 1
			set medium = 2081 2
			set medium = 2082 1
			set medium = 2083 2
			set medium = 2084 1
			set medium = 2085 2
			set medium = 2086 1
			set medium = 2087 2
			set medium = 2088 1
			set medium = 2089 2
			set medium = 2090 1
			set medium = 2091 2
			set medium = 2092 1
			set medium = 2093 2
			set medium = 2094 1
			set medium = 2095 2
			set medium = 2096 1
			set medium = 2097 2
			set medium = 2098 1
			set medium = 2099 2
			set medium = 2100 1
			set medium = 2101 2
			set medium = 2102 1
			set medium = 2103 2
			set medium = 2104 1
			set medium = 2105 2
			set medium = 2106 1
			set medium = 2107 2
			set medium = 2108 1
			set medium = 2109 2
			set medium = 2110 1
			set medium = 2111 2
			set medium = 2112 1
			set medium = 2113 2
			set medium = 2114 1
			set medium = 2115 2
			set medium = 2116 1
			set medium = 2117 2
			set medium = 2118 1
			set medium = 2119 2
			set medium = 2120 1
			set medium = 2121 2
			set medium = 2122 1
			set medium = 2123 2
			set medium = 2124 1
			set medium = 2125 2
			set medium = 2126 1
			set medium = 2127 2
			set medium = 2128 1
			set medium = 2129 2
			set medium = 2130 1
			set medium = 2131 2
			set medium = 2132 1
			set medium = 2133 2
			set medium = 2134 1
			set medium = 2135 2
			set medium = 2136 1
			set medium = 2137 2
			set medium = 2138 1
			set medium = 2139 2
			set medium = 2140 1
			set medium = 2141 2
			set medium = 2142 1
			set medium = 2143 2
			set medium = 2144 1
			set medium = 2145 2
			set medium = 2146 1
			set medium = 2147 2
			set medium = 2148 1
			set medium = 2149 2
			set medium = 2150 1
			set medium = 2151 2
			set medium = 2152 1
			set medium = 2153 2
			set medium = 2154 1
			set medium = 2155 2
			set medium = 2156 1
			set medium = 2157 2
			set medium = 2158 1
			set medium = 2159 2
			set medium = 2160 1
			set medium = 2161 2
			set medium = 2162 1
			set medium = 2163 2
			set medium = 2164 1
			set medium = 2165 2
			set medium = 2166 1
			set medium = 2167 2
			set medium = 2168 1
			set medium = 2169 2
			set medium = 2170 1
			set medium = 2171 2
			set medium = 2172 1
			set medium = 2173 2
			set medium = 2174 1
			set medium = 2175 2
			set medium = 2176 1
			set medium = 2177 2
			set medium = 2178 1
			set medium = 2179 2
			set medium = 2180 1
			set medium = 2181 2
			set medium = 2182 1
			set medium = 2183 2
			set medium = 2184 1
			set medium = 2185 2
			set medium = 2186 1
			set medium = 2187 2
			set medium = 2188 1
			set medium = 2189 2
			set medium = 2190 1
			set medium = 2191 2
			set medium = 2192 1
			set medium = 2193 2
			set medium = 2194 1
			set medium = 2195 2
			set medium = 2196 1
			set medium = 2197 2
			set medium = 2198 1
			set medium = 2199 2
			set medium = 2200 1
			set medium = 2201 2
			set medium = 2202 1
			set medium = 2203 2
			set medium = 2204 1
			set medium = 2205 2
			set medium = 2206 1
			set medium = 2207 2
			set medium = 2208 1
			set medium = 2209 2
			set medium = 2210 1
			set medium = 2211 2
			set medium = 2212 1
			set medium = 2213 2
			set medium = 2214 1
			set medium = 2215 2
			set medium = 2216 1
			set medium = 2217 2
			set medium = 2218 1
			set medium = 2219 2
			set medium = 2220 1
			set medium = 2221 2
			set medium = 2222 1
			set medium = 2223 2
			set medium = 2224 1
			set medium = 2225 2
			set medium = 2226 1
			set medium = 2227 2
			set medium = 2228 1
			set medium = 2229 2
			set medium = 2230 1
			set medium = 2231 2
			set medium = 2232 1
			set medium = 2233 2
			set medium = 2234 1
			set medium = 2235 2
			set medium = 2236 1
			set medium = 2237 2
			set medium = 2238 1
			set medium = 2239 2
			set medium = 2240 1
			set medium = 2241 2
			set medium = 2242 1
			set medium = 2243 2
			set medium = 2244 1
			set medium = 2245 2
			set medium = 2246 1
			set medium = 2247 2
			set medium = 2248 1
			set medium = 2249 2
			set medium = 2250 1
			set medium = 2251 2
			set medium = 2252 1
			set medium = 2253 2
			set medium = 2254 1
			set medium = 2255 2
			set medium = 2256 1
			set medium = 2257 2
			set medium = 2258 1
			set medium = 2259 2
			set medium = 2260 1
			set medium = 2261 2
			set medium = 2262 1
			set medium = 2263 2
			set medium = 2264 1
			set medium = 2265 2
			set medium = 2266 1
			set medium = 2267 2
			set medium = 2268 1
			set medium = 2269 2
			set medium = 2270 1
			set medium = 2271 2
			set medium = 2272 1
			set medium = 2273 2
			set medium = 2274 1
			set medium = 2275 2
			set medium = 2276 1
			set medium = 2277 2
			set medium = 2278 1
			set medium = 2279 2
			set medium = 2280 1
			set medium = 2281 2
			set medium = 2282 1
			set medium = 2283 2
			set medium = 2284 1
			set medium = 2285 2
			set medium = 2286 1
			set medium = 2287 2
			set medium = 2288 1
			set medium = 2289 2
			set medium = 2290 1
			set medium = 2291 2
			set medium = 2292 1
			set medium = 2293 2
			set medium = 2294 1
			set medium = 2295 2
			set medium = 2296 1
			set medium = 2297 2
			set medium = 2298 1
			set medium = 2299 2
			set medium = 2300 1
			set medium = 2301 2
			set medium = 2302 1
			set medium = 2303 2
			set medium = 2304 1
			set medium = 2305 2
			set medium = 2306 1
			set medium = 2307 2
			set medium = 2308 1
			set medium = 2309 2
			set medium = 2310 1
			set medium = 2311 2
			set medium = 2312 1
			set medium = 2313 2
			set medium = 2314 1
			set medium = 2315 2
			set medium = 2316 1
			set medium = 2317 2
			set medium = 2318 1
			set medium = 2319 2
			set medium = 2320 1
			set medium = 2321 2
			set medium = 2322 1
			set medium = 2323 2
			set medium = 2324 1
			set medium = 2325 2
			set medium = 2326 1
			set medium = 2327 2
			set medium = 2328 1
			set medium = 2329 2
			set medium = 2330 1
			set medium = 2331 2
			set medium = 2332 1
			set medium = 2333 2
			set medium = 2334 1
			set medium = 2335 2
			set medium = 2336 1
			set medium = 2337 2
			set medium = 2338 1
			set medium = 2339 2
			set medium = 2340 1
			set medium = 2341 2
			set medium = 2342 1
			set medium = 2343 2
			set medium = 2344 1
			set medium = 2345 2
			set medium = 2346 1
			set medium = 2347 2
			set medium = 2348 1
			set medium = 2349 2
			set medium = 2350 1
			set medium = 2351 2
			set medium = 2352 1
			set medium = 2353 2
			set medium = 2354 1
			set medium = 2355 2
			set medium = 2356 1
			set medium = 2357 2
			set medium = 2358 1
			set medium = 2359 2
			set medium = 2360 1
			set medium = 2361 2
			set medium = 2362 1
			set medium = 2363 2
			set medium = 2364 1
			set medium = 2365 2
			set medium = 2366 1
			set medium = 2367 2
			set medium = 2368 1
			set medium = 2369 2
			set medium = 2370 1
			set medium = 2371 2
			set medium = 2372 1
			set medium = 2373 2
			set medium = 2374 1
			set medium = 2375 2
			set medium = 2376 1
			set medium = 2377 2
			set medium = 2378 1
			set medium = 2379 2
			set medium = 2380 1
			set medium = 2381 2
			set medium = 2382 1
			set medium = 2383 2
			set medium = 2384 1
			set medium = 2385 2
			set medium = 2386 1
			set medium = 2387 2
			set medium = 2388 1
			set medium = 2389 2
			set medium = 2390 1
			set medium = 2391 2
			set medium = 2392 1
			set medium = 2393 2
			set medium = 2394 1
			set medium = 2395 2
			set medium = 2396 1
			set medium = 2397 2
			set medium = 2398 1
			set medium = 2399 2
			set medium = 2400 1
			set medium = 2401 2
			set medium = 2402 1
			set medium = 2403 2
			set medium = 2404 1
			set medium = 2405 2
			set medium = 2406 1
			set medium = 2407 2
			set medium = 2408 1
			set medium = 2409 2
			set medium = 2410 1
			set medium = 2411 2
			set medium = 2412 1
			set medium = 2413 2
			set medium = 2414 1
			set medium = 2415 2
			set medium = 2416 1
			set medium = 2417 2
			set medium = 2418 1
			set medium = 2419 2
			set medium = 2420 1
			set medium = 2421 2
			set medium = 2422 1
			set medium = 2423 2
			set medium = 2424 1
			set medium = 2425 2
			set medium = 2426 1
			set medium = 2427 2
			set medium = 2428 1
			set medium = 2429 2
			set medium = 2430 1
			set medium = 2431 2
			set medium = 2432 1
			set medium = 2433 2
			set medium = 2434 1
			set medium = 2435 2
			set medium = 2436 1
			set medium = 2437 2
			set medium = 2438 1
			set medium = 2439 2
			set medium = 2440 1
			set medium = 2441 2
			set medium = 2442 1
			set medium = 2443 2
			set medium = 2444 1
			set medium = 2445 2
			set medium = 2446 1
			set medium = 2447 2
			set medium = 2448 1
			set medium = 2449 2
			set medium = 2450 1
			set medium = 2451 2
			set medium = 2452 1
			set medium = 2453 2
			set medium = 2454 1
			set medium = 2455 2
			set medium = 2456 1
			set medium = 2457 2
			set medium = 2458 1
			set medium = 2459 2
			set medium = 2460 1
			set medium = 2461 2
			set medium = 2462 1
			set medium = 2463 2
			set medium = 2464 1
			set medium = 2465 2
			set medium = 2466 1
			set medium = 2467 2
			set medium = 2468 1
			set medium = 2469 2
			set medium = 2470 1
			set medium = 2471 2
			set medium = 2472 1
			set medium = 2473 2
			set medium = 2474 1
			set medium = 2475 2
			set medium = 2476 1
			set medium = 2477 2
			set medium = 2478 1
			set medium = 2479 2
			set medium = 2480 1
			set medium = 2481 2
			set medium = 2482 1
			set medium = 2483 2
			set medium = 2484 1
			set medium = 2485 2
			set medium = 2486 1
			set medium = 2487 2
			set medium = 2488 1
			set medium = 2489 2
			set medium = 2490 1
			set medium = 2491 2
			set medium = 2492 1
			set medium = 2493 2
			set medium = 2494 1
			set medium = 2495 2
			set medium = 2496 1
			set medium = 2497 2
			set medium = 2498 1
			set medium = 2499 2
			set medium = 2500 1
			set medium = 2501 2
			set medium = 2502 1
			set medium = 2503 2
			set medium = 2504 1
			set medium = 2505 2
			set medium = 2506 1
			set medium = 2507 2
			set medium = 2508 1
			set medium = 2509 2
			set medium = 2510 1
			set medium = 2511 2
			set medium = 2512 1
			set medium = 2513 2
			set medium = 2514 1
			set medium = 2515 2
			set medium = 2516 1
			set medium = 2517 2
			set medium = 2518 1
			set medium = 2519 2
			set medium = 2520 1
			set medium = 2521 2
			set medium = 2522 1
			set medium = 2523 2
			set medium = 2524 1
			set medium = 2525 2
			set medium = 2526 1
			set medium = 2527 2
			set medium = 2528 1
			set medium = 2529 2
			set medium = 2530 1
			set medium = 2531 2
			set medium = 2532 1
			set medium = 2533 2
			set medium = 2534 1
			set medium = 2535 2
			set medium = 2536 1
			set medium = 2537 2
			set medium = 2538 1
			set medium = 2539 2
			set medium = 2540 1
			set medium = 2541 2
			set medium = 2542 1
			set medium = 2543 2
			set medium = 2544 1
			set medium = 2545 2
			set medium = 2546 1
			set medium = 2547 2
			set medium = 2548 1
			set medium = 2549 2
			set medium = 2550 1
			set medium = 2551 2
			set medium = 2552 1
			set medium = 2553 2
			set medium = 2554 1
			set medium = 2555 2
			set medium = 2556 1
			set medium = 2557 2
			set medium = 2558 1
			set medium = 2559 2
			set medium = 2560 1
			set medium = 2561 2
			set medium = 2562 1
			set medium = 2563 2
			set medium = 2564 1
			set medium = 2565 2
			set medium = 2566 1
			set medium = 2567 2
			set medium = 2568 1
			set medium = 2569 2
			set medium = 2570 1
			set medium = 2571 2
			set medium = 2572 1
			set medium = 2573 2
			set medium = 2574 1
			set medium = 2575 2
			set medium = 2576 1
			set medium = 2577 2
			set medium = 2578 1
			set medium = 2579 2
			set medium = 2580 1
			set medium = 2581 2
			set medium = 2582 1
			set medium = 2583 2
			set medium = 2584 1
			set medium = 2585 2
			set medium = 2586 1
			set medium = 2587 2
			set medium = 2588 1
			set medium = 2589 2
			set medium = 2590 1
			set medium = 2591 2
			set medium = 2592 1
			set medium = 2593 2
			set medium = 2594 1
			set medium = 2595 2
			set medium = 2596 1
			set medium = 2597 2
			set medium = 2598 1
			set medium = 2599 2
			set medium = 2600 1
			set medium = 2601 2
			set medium = 2602 1
			set medium = 2603 2
			set medium = 2604 1
			set medium = 2605 2
			set medium = 2606 1
			set medium = 2607 2
			set medium = 2608 1
			set medium = 2609 2
			set medium = 2610 1
			set medium = 2611 2
			set medium = 2612 1
			set medium = 2613 2
			set medium = 2614 1
			set medium = 2615 2
			set medium = 2616 1
			set medium = 2617 2
			set medium = 2618 1
			set medium = 2619 2
			set medium = 2620 1
			set medium = 2621 2
			set medium = 2622 1
			set medium = 2623 2
			set medium = 2624 1
			set medium = 2625 2
			set medium = 2626 1
			set medium = 2627 2
			set medium = 2628 1
			set medium = 2629 2
			set medium = 2630 1
			set medium = 2631 2
			set medium = 2632 1
			set medium = 2633 2
			set medium = 2634 1
			set medium = 2635 2
			set medium = 2636 1
			set medium = 2637 2
			set medium = 2638 1
			set medium = 2639 2
			set medium = 2640 1
			set medium = 2641 2
			set medium = 2642 1
			set medium = 2643 2
			set medium = 2644 1
			set medium = 2645 2
			set medium = 2646 1
			set medium = 2647 2
			set medium = 2648 1
			set medium = 2649 2
			set medium = 2650 1
			set medium = 2651 2
			set medium = 2652 1
			set medium = 2653 2
			set medium = 2654 1
			set medium = 2655 2
			set medium = 2656 1
			set medium = 2657 2
			set medium = 2658 1
			set medium = 2659 2
			set medium = 2660 1
			set medium = 2661 2
			set medium = 2662 1
			set medium = 2663 2
			set medium = 2664 1
			set medium = 2665 2
			set medium = 2666 1
			set medium = 2667 2
			set medium = 2668 1
			set medium = 2669 2
			set medium = 2670 1
			set medium = 2671 2
			set medium = 2672 1
			set medium = 2673 2
			set medium = 2674 1
			set medium = 2675 2
			set medium = 2676 1
			set medium = 2677 2
			set medium = 2678 1
			set medium = 2679 2
			set medium = 2680 1
			set medium = 2681 2
			set medium = 2682 1
			set medium = 2683 2
			set medium = 2684 1
			set medium = 2685 2
			set medium = 2686 1
			set medium = 2687 2
			set medium = 2688 1
			set medium = 2689 2
			set medium = 2690 1
			set medium = 2691 2
			set medium = 2692 1
			set medium = 2693 2
			set medium = 2694 1
			set medium = 2695 2
			set medium = 2696 1
			set medium = 2697 2
			set medium = 2698 1
			set medium = 2699 2
			set medium = 2700 1
			set medium = 2701 2
			set medium = 2702 1
			set medium = 2703 2
			set medium = 2704 1
			set medium = 2705 2
			set medium = 2706 1
			set medium = 2707 2
			set medium = 2708 1
			set medium = 2709 2
			set medium = 2710 1
			set medium = 2711 2
			set medium = 2712 1
			set medium = 2713 2
			set medium = 2714 1
			set medium = 2715 2
			set medium = 2716 1
			set medium = 2717 2
			set medium = 2718 1
			set medium = 2719 2
			set medium = 2720 1
			set medium = 2721 2
			set medium = 2722 1
			set medium = 2723 2
			set medium = 2724 1
			set medium = 2725 2
			set medium = 2726 1
			set medium = 2727 2
			set medium = 2728 1
			set medium = 2729 2
			set medium = 2730 1
			set medium = 2731 2
			set medium = 2732 1
			set medium = 2733 2
			set medium = 2734 1
			set medium = 2735 2
			set medium = 2736 1
			set medium = 2737 2
			set medium = 2738 1
			set medium = 2739 2
			set medium = 2740 1
			set medium = 2741 2
			set medium = 2742 1
			set medium = 2743 2
			set medium = 2744 1
			set medium = 2745 2
			set medium = 2746 1
			set medium = 2747 2
			set medium = 2748 1
			set medium = 2749 2
			set medium = 2750 1
			set medium = 2751 2
			set medium = 2752 1
			set medium = 2753 2
			set medium = 2754 1
			set medium = 2755 2
			set medium = 2756 1
			set medium = 2757 2
			set medium = 2758 1
			set medium = 2759 2
			set medium = 2760 1
			set medium = 2761 2
			set medium = 2762 1
			set medium = 2763 2
			set medium = 2764 1
			set medium = 2765 2
			set medium = 2766 1
			set medium = 2767 2
			set medium = 2768 1
			set medium = 2769 2
			set medium = 2770 1
			set medium = 2771 2
			set medium = 2772 1
			set medium = 2773 2
			set medium = 2774 1
			set medium = 2775 2
			set medium = 2776 1
			set medium = 2777 2
			set medium = 2778 1
			set medium = 2779 2
			set medium = 2780 1
			set medium = 2781 2
			set medium = 2782 1
			set medium = 2783 2
			set medium = 2784 1
			set medium = 2785 2
			set medium = 2786 1
			set medium = 2787 2
			set medium = 2788 1
			set medium = 2789 2
			set medium = 2790 1
			set medium = 2791 2
			set medium = 2792 1
			set medium = 2793 2
			set medium = 2794 1
			set medium = 2795 2
			set medium = 2796 1
			set medium = 2797 2
			set medium = 2798 1
			set medium = 2799 2
			set medium = 2800 1
			set medium = 2801 2
			set medium = 2802 1
			set medium = 2803 2
			set medium = 2804 1
			set medium = 2805 2
			set medium = 2806 1
			set medium = 2807 2
			set medium = 2808 1
			set medium = 2809 2
			set medium = 2810 1
			set medium = 2811 2
			set medium = 2812 1
			set medium = 2813 2
			set medium = 2814 1
			set medium = 2815 2
			set medium = 2816 1
			set medium = 2817 2
			set medium = 2818 1
			set medium = 2819 2
			set medium = 2820 1
			set medium = 2821 2
			set medium = 2822 1
			set medium = 2823 2
			set medium = 2824 1
			set medium = 2825 2
			set medium = 2826 1
			set medium = 2827 2
			set medium = 2828 1
			set medium = 2829 2
			set medium = 2830 1
			set medium = 2831 2
			set medium = 2832 1
			set medium = 2833 2
			set medium = 2834 1
			set medium = 2835 2
			set medium = 2836 1
			set medium = 2837 2
			set medium = 2838 1
			set medium = 2839 2
			set medium = 2840 1
			set medium = 2841 2
			set medium = 2842 1
			set medium = 2843 2
			set medium = 2844 1
			set medium = 2845 2
			set medium = 2846 1
			set medium = 2847 2
			set medium = 2848 1
			set medium = 2849 2
			set medium = 2850 1
			set medium = 2851 2
			set medium = 2852 1
			set medium = 2853 2
			set medium = 2854 1
			set medium = 2855 2
			set medium = 2856 1
			set medium = 2857 2
			set medium = 2858 1
			set medium = 2859 2
			set medium = 2860 1
			set medium = 2861 2
			set medium = 2862 1
			set medium = 2863 2
			set medium = 2864 1
			set medium = 2865 2
			set medium = 2866 1
			set medium = 2867 2
			set medium = 2868 1
			set medium = 2869 2
			set medium = 2870 1
			set medium = 2871 2
			set medium = 2872 1
			set medium = 2873 2
			set medium = 2874 1
			set medium = 2875 2
			set medium = 2876 1
			set medium = 2877 2
			set medium = 2878 1
			set medium = 2879 2
			set medium = 2880 1
			set medium = 2881 2
			set medium = 2882 1
			set medium = 2883 2
			set medium = 2884 1
			set medium = 2885 2
			set medium = 2886 1
			set medium = 2887 2
			set medium = 2888 1
			set medium = 2889 2
			set medium = 2890 1
			set medium = 2891 2
			set medium = 2892 1
			set medium = 2893 2
			set medium = 2894 1
			set medium = 2895 2
			set medium = 2896 1
			set medium = 2897 2
			set medium = 2898 1
			set medium = 2899 2
			set medium = 2900 1
			set medium = 2901 2
			set medium = 2902 1
			set medium = 2903 2
			set medium = 2904 1
			set medium = 2905 2
			set medium = 2906 1
			set medium = 2907 2
			set medium = 2908 1
			set medium = 2909 2
			set medium = 2910 1
			set medium = 2911 2
			set medium = 2912 1
			set medium = 2913 2
			set medium = 2914 1
			set medium = 2915 2
			set medium = 2916 1
			set medium = 2917 2
			set medium = 2918 1
			set medium = 2919 2
			set medium = 2920 1
			set medium = 2921 2
			set medium = 2922 1
			set medium = 2923 2
			set medium = 2924 1
			set medium = 2925 2
			set medium = 2926 1
			set medium = 2927 2
			set medium = 2928 1
			set medium = 2929 2
			set medium = 2930 1
			set medium = 2931 2
			set medium = 2932 1
			set medium = 2933 2
			set medium = 2934 1
			set medium = 2935 2
			set medium = 2936 1
			set medium = 2937 2
			set medium = 2938 1
			set medium = 2939 2
			set medium = 2940 1
			set medium = 2941 2
			set medium = 2942 1
			set medium = 2943 2
			set medium = 2944 1
			set medium = 2945 2
			set medium = 2946 1
			set medium = 2947 2
			set medium = 2948 1
			set medium = 2949 2
			set medium = 2950 1
			set medium = 2951 2
			set medium = 2952 1
			set medium = 2953 2
			set medium = 2954 1
			set medium = 2955 2
			set medium = 2956 1
			set medium = 2957 2
			set medium = 2958 1
			set medium = 2959 2
			set medium = 2960 1
			set medium = 2961 2
			set medium = 2962 1
			set medium = 2963 2
			set medium = 2964 1
			set medium = 2965 2
			set medium = 2966 1
			set medium = 2967 2
			set medium = 2968 1
			set medium = 2969 2
			set medium = 2970 1
			set medium = 2971 2
			set medium = 2972 1
			set medium = 2973 2
			set medium = 2974 1
			set medium = 2975 2
			set medium = 2976 1
			set medium = 2977 2
			set medium = 2978 1
			set medium = 2979 2
			set medium = 2980 1
			set medium = 2981 2
			set medium = 2982 1
			set medium = 2983 2
			set medium = 2984 1
			set medium = 2985 2
			set medium = 2986 1
			set medium = 2987 2
			set medium = 2988 1
			set medium = 2989 2
			set medium = 2990 1
			set medium = 2991 2
			set medium = 2992 1
			set medium = 2993 2
			set medium = 2994 1
			set medium = 2995 2
			set medium = 2996 1
			set medium = 2997 2
			set medium = 2998 1
			set medium = 2999 2
			set medium = 3000 1
			set medium = 3001 2
			set medium = 3002 1
			set medium = 3003 2
			set medium = 3004 1
			set medium = 3005 2
			set medium = 3006 1
			set medium = 3007 2
			set medium = 3008 1
			set medium = 3009 2
			set medium = 3010 1
			set medium = 3011 2
			set medium = 3012 1
			set medium = 3013 2
			set medium = 3014 1
			set medium = 3015 2
			set medium = 3016 1
			set medium = 3017 2
			set medium = 3018 1
			set medium = 3019 2
			set medium = 3020 1
			set medium = 3021 2
			set medium = 3022 1
			set medium = 3023 2
			set medium = 3024 1
			set medium = 3025 2
			set medium = 3026 1
			set medium = 3027 2
			set medium = 3028 1
			set medium = 3029 2
			set medium = 3030 1
			set medium = 3031 2
			set medium = 3032 1
			set medium = 3033 2
			set medium = 3034 1
			set medium = 3035 2
			set medium = 3036 1
			set medium = 3037 2
			set medium = 3038 1
			set medium = 3039 2
			set medium = 3040 1
			set medium = 3041 2
			set medium = 3042 1
			set medium = 3043 2
			set medium = 3044 1
			set medium = 3045 2
			set medium = 3046 1
			set medium = 3047 2
			set medium = 3048 1
			set medium = 3049 2
			set medium = 3050 1
			set medium = 3051 2
			set medium = 3052 1
			set medium = 3053 2
			set medium = 3054 1
			set medium = 3055 2
			set medium = 3056 1
			set medium = 3057 2
			set medium = 3058 1
			set medium = 3059 2
			set medium = 3060 1
			set medium = 3061 2
			set medium = 3062 1
			set medium = 3063 2
			set medium = 3064 1
			set medium = 3065 2
			set medium = 3066 1
			set medium = 3067 2
			set medium = 3068 1
			set medium = 3069 2
			set medium = 3070 1
			set medium = 3071 2
			set medium = 3072 1
			set medium = 3073 2
			set medium = 3074 1
			set medium = 3075 2
			set medium = 3076 1
			set medium = 3077 2
			set medium = 3078 1
			set medium = 3079 2
			set medium = 3080 1
			set medium = 3081 2
			set medium = 3082 1
			set medium = 3083 2
			set medium = 3084 1
			set medium = 3085 2
			set medium = 3086 1
			set medium = 3087 2
			set medium = 3088 1
			set medium = 3089 2
			set medium = 3090 1
			set medium = 3091 2
			set medium = 3092 1
			set medium = 3093 2
			set medium = 3094 1
			set medium = 3095 2
			set medium = 3096 1
			set medium = 3097 2
			set medium = 3098 1
			set medium = 3099 2
			set medium = 3100 1
			set medium = 3101 2
			set medium = 3102 1
			set medium = 3103 2
			set medium = 3104 1
			set medium = 3105 2
			set medium = 3106 1
			set medium = 3107 2
			set medium = 3108 1
			set medium = 3109 2
			set medium = 3110 1
			set medium = 3111 2
			set medium = 3112 1
			set medium = 3113 2
			set medium = 3114 1
			set medium = 3115 2
			set medium = 3116 1
			set medium = 3117 2
			set medium = 3118 1
			set medium = 3119 2
			set medium = 3120 1
			set medium = 3121 2
			set medium = 3122 1
			set medium = 3123 2
			set medium = 3124 1
			set medium = 3125 2
			set medium = 3126 1
			set medium = 3127 2
			set medium = 3128 1
			set medium = 3129 2
			set medium = 3130 1
			set medium = 3131 2
			set medium = 3132 1
			set medium = 3133 2
			set medium = 3134 1
			set medium = 3135 2
			set medium = 3136 1
			set medium = 3137 2
			set medium = 3138 1
			set medium = 3139 2
			set medium = 3140 1
			set medium = 3141 2
			set medium = 3142 1
			set medium = 3143 2
			set medium = 3144 1
			set medium = 3145 2
			set medium = 3146 1
			set medium = 3147 2
			set medium = 3148 1
			set medium = 3149 2
			set medium = 3150 1
			set medium = 3151 2
			set medium = 3152 1
			set medium = 3153 2
			set medium = 3154 1
			set medium = 3155 2
			set medium = 3156 1
			set medium = 3157 2
			set medium = 3158 1
			set medium = 3159 2
			set medium = 3160 1
			set medium = 3161 2
			set medium = 3162 1
			set medium = 3163 2
			set medium = 3164 1
			set medium = 3165 2
			set medium = 3166 1
			set medium = 3167 2
			set medium = 3168 1
			set medium = 3169 2
			set medium = 3170 1
			set medium = 3171 2
			set medium = 3172 1
			set medium = 3173 2
			set medium = 3174 1
			set medium = 3175 2
			set medium = 3176 1
			set medium = 3177 2
			set medium = 3178 1
			set medium = 3179 2
			set medium = 3180 1
			set medium = 3181 2
			set medium = 3182 1
			set medium = 3183 2
			set medium = 3184 1
			set medium = 3185 2
			set medium = 3186 1
			set medium = 3187 2
			set medium = 3188 1
			set medium = 3189 2
			set medium = 3190 1
			set medium = 3191 2
			set medium = 3192 1
			set medium = 3193 2
			set medium = 3194 1
			set medium = 3195 2
			set medium = 3196 1
			set medium = 3197 2
			set medium = 3198 1
			set medium = 3199 2
			set medium = 3200 1
			set medium = 3201 2
			set medium = 3202 1
			set medium = 3203 2
			set medium = 3204 1
			set medium = 3205 2
			set medium = 3206 1
			set medium = 3207 2
			set medium = 3208 1
			set medium = 3209 2
			set medium = 3210 1
			set medium = 3211 2
			set medium = 3212 1
			set medium = 3213 2
			set medium = 3214 1
			set medium = 3215 2
			set medium = 3216 1
			set medium = 3217 2
			set medium = 3218 1
			set medium = 3219 2
			set medium = 3220 1
			set medium = 3221 2
			set medium = 3222 1
			set medium = 3223 2
			set medium = 3224 1
			set medium = 3225 2
			set medium = 3226 1
			set medium = 3227 2
			set medium = 3228 1
			set medium = 3229 2
			set medium = 3230 1
			set medium = 3231 2
			set medium = 3232 1
			set medium = 3233 2
			set medium = 3234 1
			set medium = 3235 2
			set medium = 3236 1
			set medium = 3237 2
			set medium = 3238 1
			set medium = 3239 2
			set medium = 3240 1
			set medium = 3241 2
			set medium = 3242 1
			set medium = 3243 2
			set medium = 3244 1
			set medium = 3245 2
			set medium = 3246 1
			set medium = 3247 2
			set medium = 3248 1
			set medium = 3249 2
			set medium = 3250 1
			set medium = 3251 2
			set medium = 3252 1
			set medium = 3253 2
			set medium = 3254 1
			set medium = 3255 2
			set medium = 3256 1
			set medium = 3257 2
			set medium = 3258 1
			set medium = 3259 2
			set medium = 3260 1
			set medium = 3261 2
			set medium = 3262 1
			set medium = 3263 2
			set medium = 3264 1
			set medium = 3265 2
			set medium = 3266 1
			set medium = 3267 2
			set medium = 3268 1
			set medium = 3269 2
			set medium = 3270 1
			set medium = 3271 2
			set medium = 3272 1
			set medium = 3273 2
			set medium = 3274 1
			set medium = 3275 2
			set medium = 3276 1
			set medium = 3277 2
			set medium = 3278 1
			set medium = 3279 2
			set medium = 3280 1
			set medium = 3281 2
			set medium = 3282 1
			set medium = 3283 2
			set medium = 3284 1
			set medium = 3285 2
			set medium = 3286 1
			set medium = 3287 2
			set medium = 3288 1
			set medium = 3289 2
			set medium = 3290 1
			set medium = 3291 2
			set medium = 3292 1
			set medium = 3293 2
			set medium = 3294 1
			set medium = 3295 2
			set medium = 3296 1
			set medium = 3297 2
			set medium = 3298 1
			set medium = 3299 2
			set medium = 3300 1
			set medium = 3301 2
			set medium = 3302 1
			set medium = 3303 2
			set medium = 3304 1
			set medium = 3305 2
			set medium = 3306 1
			set medium = 3307 2
			set medium = 3308 1
			set medium = 3309 2
			set medium = 3310 1
			set medium = 3311 2
			set medium = 3312 1
			set medium = 3313 2
			set medium = 3314 1
			set medium = 3315 2
			set medium = 3316 1
			set medium = 3317 2
			set medium = 3318 1
			set medium = 3319 2
			set medium = 3320 1
			set medium = 3321 2
			set medium = 3322 1
			set medium = 3323 2
			set medium = 3324 1
			set medium = 3325 2
			set medium = 3326 1
			set medium = 3327 2
			set medium = 3328 1
			set medium = 3329 2
			set medium = 3330 1
			set medium = 3331 2
			set medium = 3332 1
			set medium = 3333 2
			set medium = 3334 1
			set medium = 3335 2
			set medium = 3336 1
			set medium = 3337 2
			set medium = 3338 1
			set medium = 3339 2
			set medium = 3340 1
			set medium = 3341 2
			set medium = 3342 1
			set medium = 3343 2
			set medium = 3344 1
			set medium = 3345 2
			set medium = 3346 1
			set medium = 3347 2
			set medium = 3348 1
			set medium = 3349 2
			set medium = 3350 1
			set medium = 3351 2
			set medium = 3352 1
			set medium = 3353 2
			set medium = 3354 1
			set medium = 3355 2
			set medium = 3356 1
			set medium = 3357 2
			set medium = 3358 1
			set medium = 3359 2
			set medium = 3360 1
			set medium = 3361 2
			set medium = 3362 1
			set medium = 3363 2
			set medium = 3364 1
			set medium = 3365 2
			set medium = 3366 1
			set medium = 3367 2
			set medium = 3368 1
			set medium = 3369 2
			set medium = 3370 1
			set medium = 3371 2
			set medium = 3372 1
			set medium = 3373 2
			set medium = 3374 1
			set medium = 3375 2
			set medium = 3376 1
			set medium = 3377 2
			set medium = 3378 1
			set medium = 3379 2
			set medium = 3380 1
			set medium = 3381 2
			set medium = 3382 1
			set medium = 3383 2
			set medium = 3384 1
			set medium = 3385 2
			set medium = 3386 1
			set medium = 3387 2
			set medium = 3388 1
			set medium = 3389 2
			set medium = 3390 1
			set medium = 3391 2
			set medium = 3392 1
			set medium = 3393 2
			set medium = 3394 1
			set medium = 3395 2
			set medium = 3396 1
			set medium = 3397 2
			set medium = 3398 1
			set medium = 3399 2
			set medium = 3400 1
			set medium = 3401 2
			set medium = 3402 1
			set medium = 3403 2
			set medium = 3404 1
			set medium = 3405 2
			set medium = 3406 1
			set medium = 3407 2
			set medium = 3408 1
			set medium = 3409 2
			set medium = 3410 1
			set medium = 3411 2
			set medium = 3412 1
			set medium = 3413 2
			set medium = 3414 1
			set medium = 3415 2
			set medium = 3416 1
			set medium = 3417 2
			set medium = 3418 1
			set medium = 3419 2
			set medium = 3420 1
			set medium = 3421 2
			set medium = 3422 1
			set medium = 3423 2
			set medium = 3424 1
			set medium = 3425 2
			set medium = 3426 1
			set medium = 3427 2
			set medium = 3428 1
			set medium = 3429 2
			set medium = 3430 1
			set medium = 3431 2
			set medium = 3432 1
			set medium = 3433 2
			set medium = 3434 1
			set medium = 3435 2
			set medium = 3436 1
			set medium = 3437 2
			set medium = 3438 1
			set medium = 3439 2
			set medium = 3440 1
			set medium = 3441 2
			set medium = 3442 1
			set medium = 3443 2
			set medium = 3444 1
			set medium = 3445 2
			set medium = 3446 1
			set medium = 3447 2
			set medium = 3448 1
			set medium = 3449 2
			set medium = 3450 1
			set medium = 3451 2
			set medium = 3452 1
			set medium = 3453 2
			set medium = 3454 1
			set medium = 3455 2
			set medium = 3456 1
			set medium = 3457 2
			set medium = 3458 1
			set medium = 3459 2
			set medium = 3460 1
			set medium = 3461 2
			set medium = 3462 1
			set medium = 3463 2
			set medium = 3464 1
			set medium = 3465 2
			set medium = 3466 1
			set medium = 3467 2
			set medium = 3468 1
			set medium = 3469 2
			set medium = 3470 1
			set medium = 3471 2
			set medium = 3472 1
			set medium = 3473 2
			set medium = 3474 1
			set medium = 3475 2
			set medium = 3476 1
			set medium = 3477 2
			set medium = 3478 1
			set medium = 3479 2
			set medium = 3480 1
			set medium = 3481 2
			set medium = 3482 1
			set medium = 3483 2
			set medium = 3484 1
			set medium = 3485 2
			set medium = 3486 1
			set medium = 3487 2
			set medium = 3488 1
			set medium = 3489 2
			set medium = 3490 1
			set medium = 3491 2
			set medium = 3492 1
			set medium = 3493 2
			set medium = 3494 1
			set medium = 3495 2
			set medium = 3496 1
			set medium = 3497 2
			set medium = 3498 1
			set medium = 3499 2
			set medium = 3500 1
			set medium = 3501 2
			set medium = 3502 1
			set medium = 3503 2
			set medium = 3504 1
			set medium = 3505 2
			set medium = 3506 1
			set medium = 3507 2
			set medium = 3508 1
			set medium = 3509 2
			set medium = 3510 1
			set medium = 3511 2
			set medium = 3512 1
			set medium = 3513 2
			set medium = 3514 1
			set medium = 3515 2
			set medium = 3516 1
			set medium = 3517 2
			set medium = 3518 1
			set medium = 3519 2
			set medium = 3520 1
			set medium = 3521 2
			set medium = 3522 1
			set medium = 3523 2
			set medium = 3524 1
			set medium = 3525 2
			set medium = 3526 1
			set medium = 3527 2
			set medium = 3528 1
			set medium = 3529 2
			set medium = 3530 1
			set medium = 3531 2
			set medium = 3532 1
			set medium = 3533 2
			set medium = 3534 1
			set medium = 3535 2
			set medium = 3536 1
			set medium = 3537 2
			set medium = 3538 1
			set medium = 3539 2
			set medium = 3540 1
			set medium = 3541 2
			set medium = 3542 1
			set medium = 3543 2
			set medium = 3544 1
			set medium = 3545 2
			set medium = 3546 1
			set medium = 3547 2
			set medium = 3548 1
			set medium = 3549 2
			set medium = 3550 1
			set medium = 3551 2
			set medium = 3552 1
			set medium = 3553 2
			set medium = 3554 1
			set medium = 3555 2
			set medium = 3556 1
			set medium = 3557 2
			set medium = 3558 1
			set medium = 3559 2
			set medium = 3560 1
			set medium = 3561 2
			set medium = 3562 1
			set medium = 3563 2
			set medium = 3564 1
			set medium = 3565 2
			set medium = 3566 1
			set medium = 3567 2
			set medium = 3568 1
			set medium = 3569 2
			set medium = 3570 1
			set medium = 3571 2
			set medium = 3572 1
			set medium = 3573 2
			set medium = 3574 1
			set medium = 3575 2
			set medium = 3576 1
			set medium = 3577 2
			set medium = 3578 1
			set medium = 3579 2
			set medium = 3580 1
			set medium = 3581 2
			set medium = 3582 1
			set medium = 3583 2
			set medium = 3584 1
			set medium = 3585 2
			set medium = 3586 1
			set medium = 3587 2
			set medium = 3588 1
			set medium = 3589 2
			set medium = 3590 1
			set medium = 3591 2
			set medium = 3592 1
			set medium = 3593 2
			set medium = 3594 1
			set medium = 3595 2
			set medium = 3596 1
			set medium = 3597 2
			set medium = 3598 1
			set medium = 3599 2
			set medium = 3600 1
			set medium = 3601 2
			set medium = 3602 1
			set medium = 3603 2
			set medium = 3604 1
			set medium = 3605 2
			set medium = 3606 1
			set medium = 3607 2
			set medium = 3608 1
			set medium = 3609 2
			set medium = 3610 1
			set medium = 3611 2
			set medium = 3612 1
			set medium = 3613 2
			set medium = 3614 1
			set medium = 3615 2
			set medium = 3616 1
			set medium = 3617 2
			set medium = 3618 1
			set medium = 3619 2
			set medium = 3620 1
			set medium = 3621 2
			set medium = 3622 1
			set medium = 3623 2
			set medium = 3624 1
			set medium = 3625 2
			set medium = 3626 1
			set medium = 3627 2
			set medium = 3628 1
			set medium = 3629 2
			set medium = 3630 1
			set medium = 3631 2
			set medium = 3632 1
			set medium = 3633 2
			set medium = 3634 1
			set medium = 3635 2
			set medium = 3636 1
			set medium = 3637 2
			set medium = 3638 1
			set medium = 3639 2
			set medium = 3640 1
			set medium = 3641 2
			set medium = 3642 1
			set medium = 3643 2
			set medium = 3644 1
			set medium = 3645 2
			set medium = 3646 1
			set medium = 3647 2
			set medium = 3648 1
			set medium = 3649 2
			set medium = 3650 1
			set medium = 3651 2
			set medium = 3652 1
			set medium = 3653 2
			set medium = 3654 1
			set medium = 3655 2
			set medium = 3656 1
			set medium = 3657 2
			set medium = 3658 1
			set medium = 3659 2
			set medium = 3660 1
			set medium = 3661 2
			set medium = 3662 1
			set medium = 3663 2
			set medium = 3664 1
			set medium = 3665 2
			set medium = 3666 1
			set medium = 3667 2
			set medium = 3668 1
			set medium = 3669 2
			set medium = 3670 1
			set medium = 3671 2
			set medium = 3672 1
			set medium = 3673 2
			set medium = 3674 1
			set medium = 3675 2
			set medium = 3676 1
			set medium = 3677 2
			set medium = 3678 1
			set medium = 3679 2
			set medium = 3680 1
			set medium = 3681 2
			set medium = 3682 1
			set medium = 3683 2
			set medium = 3684 1
			set medium = 3685 2
			set medium = 3686 1
			set medium = 3687 2
			set medium = 3688 1
			set medium = 3689 2
			set medium = 3690 1
			set medium = 3691 2
			set medium = 3692 1
			set medium = 3693 2
			set medium = 3694 1
			set medium = 3695 2
			set medium = 3696 1
			set medium = 3697 2
			set medium = 3698 1
			set medium = 3699 2
			set medium = 3700 1
			set medium = 3701 2
			set medium = 3702 1
			set medium = 3703 2
			set medium = 3704 1
			set medium = 3705 2
			set medium = 3706 1
			set medium = 3707 2
			set medium = 3708 1
			set medium = 3709 2
			set medium = 3710 1
			set medium = 3711 2
			set medium = 3712 1
			set medium = 3713 2
			set medium = 3714 1
			set medium = 3715 2
			set medium = 3716 1
			set medium = 3717 2
			set medium = 3718 1
			set medium = 3719 2
			set medium = 3720 1
			set medium = 3721 2
			set medium = 3722 1
			set medium = 3723 2
			set medium = 3724 1
			set medium = 3725 2
			set medium = 3726 1
			set medium = 3727 2
			set medium = 3728 1
			set medium = 3729 2
			set medium = 3730 1
			set medium = 3731 2
			set medium = 3732 1
			set medium = 3733 2
			set medium = 3734 1
			set medium = 3735 2
			set medium = 3736 1
			set medium = 3737 2
			set medium = 3738 1
			set medium = 3739 2
			set medium = 3740 1
			set medium = 3741 2
			set medium = 3742 1
			set medium = 3743 2
			set medium = 3744 1
			set medium = 3745 2
			set medium = 3746 1
			set medium = 3747 2
			set medium = 3748 1
			set medium = 3749 2
			set medium = 3750 1
			set medium = 3751 2
			set medium = 3752 1
			set medium = 3753 2
			set medium = 3754 1
			set medium = 3755 2
			set medium = 3756 1
			set medium = 3757 2
			set medium = 3758 1
			set medium = 3759 2
			set medium = 3760 1
			set medium = 3761 2
			set medium = 3762 1
			set medium = 3763 2
			set medium = 3764 1
			set medium = 3765 2
			set medium = 3766 1
			set medium = 3767 2
			set medium = 3768 1
			set medium = 3769 2
			set medium = 3770 1
			set medium = 3771 2
			set medium = 3772 1
			set medium = 3773 2
			set medium = 3774 1
			set medium = 3775 2
			set medium = 3776 1
			set medium = 3777 2
			set medium = 3778 1
			set medium = 3779 2
			set medium = 3780 1
			set medium = 3781 2
			set medium = 3782 1
			set medium = 3783 2
			set medium = 3784 1
			set medium = 3785 2
			set medium = 3786 1
			set medium = 3787 2
			set medium = 3788 1
			set medium = 3789 2
			set medium = 3790 1
			set medium = 3791 2
			set medium = 3792 1
			set medium = 3793 2
			set medium = 3794 1
			set medium = 3795 2
			set medium = 3796 1
			set medium = 3797 2
			set medium = 3798 1
			set medium = 3799 2
			set medium = 3800 1
			set medium = 3801 2
			set medium = 3802 1
			set medium = 3803 2
			set medium = 3804 1
			set medium = 3805 2
			set medium = 3806 1
			set medium = 3807 2
			set medium = 3808 1
			set medium = 3809 2
			set medium = 3810 1
			set medium = 3811 2
			set medium = 3812 1
			set medium = 3813 2
			set medium = 3814 1
			set medium = 3815 2
			set medium = 3816 1
			set medium = 3817 2
			set medium = 3818 1
			set medium = 3819 2
			set medium = 3820 1
			set medium = 3821 2
			set medium = 3822 1
			set medium = 3823 2
			set medium = 3824 1
			set medium = 3825 2
			set medium = 3826 1
			set medium = 3827 2
			set medium = 3828 1
			set medium = 3829 2
			set medium = 3830 1
			set medium = 3831 2
			set medium = 3832 1
			set medium = 3833 2
			set medium = 3834 1
			set medium = 3835 2
			set medium = 3836 1
			set medium = 3837 2
			set medium = 3838 1
			set medium = 3839 2
			set medium = 3840 1
			set medium = 3841 2
			set medium = 3842 1
			set medium = 3843 2
			set medium = 3844 1
			set medium = 3845 2
			set medium = 3846 1
			set medium = 3847 2
			set medium = 3848 1
			set medium = 3849 2
			set medium = 3850 1
			set medium = 3851 2
			set medium = 3852 1
			set medium = 3853 2
			set medium = 3854 1
			set medium = 3855 2
			set medium = 3856 1
			set medium = 3857 2
			set medium = 3858 1
			set medium = 3859 2
			set medium = 3860 1
			set medium = 3861 2
			set medium = 3862 1
			set medium = 3863 2
			set medium = 3864 1
			set medium = 3865 2
			set medium = 3866 1
			set medium = 3867 2
			set medium = 3868 1
			set medium = 3869 2
			set medium = 3870 1
			set medium = 3871 2
			set medium = 3872 1
			set medium = 3873 2
			set medium = 3874 1
			set medium = 3875 2
			set medium = 3876 1
			set medium = 3877 2
			set medium = 3878 1
			set medium = 3879 2
			set medium = 3880 1
			set medium = 3881 2
			set medium = 3882 1
			set medium = 3883 2
			set medium = 3884 1
			set medium = 3885 2
			set medium = 3886 1
			set medium = 3887 2
			set medium = 3888 1
			set medium = 3889 2
			set medium = 3890 1
			set medium = 3891 2
			set medium = 3892 1
			set medium = 3893 2
			set medium = 3894 1
			set medium = 3895 2
			set medium = 3896 1
			set medium = 3897 2
			set medium = 3898 1
			set medium = 3899 2
			set medium = 3900 1
			set medium = 3901 2
			set medium = 3902 1
			set medium = 3903 2
			set medium = 3904 1
			set medium = 3905 2
			set medium = 3906 1
			set medium = 3907 2
			set medium = 3908 1
			set medium = 3909 2
			set medium = 3910 1
			set medium = 3911 2
			set medium = 3912 1
			set medium = 3913 2
			set medium = 3914 1
			set medium = 3915 2
			set medium = 3916 1
			set medium = 3917 2
			set medium = 3918 1
			set medium = 3919 2
			set medium = 3920 1
			set medium = 3921 2
			set medium = 3922 1
			set medium = 3923 2
			set medium = 3924 1
			set medium = 3925 2
			set medium = 3926 1
			set medium = 3927 2
			set medium = 3928 1
			set medium = 3929 2
			set medium = 3930 1
			set medium = 3931 2
			set medium = 3932 1
			set medium = 3933 2
			set medium = 3934 1
			set medium = 3935 2
			set medium = 3936 1
			set medium = 3937 2
			set medium = 3938 1
			set medium = 3939 2
			set medium = 3940 1
			set medium = 3941 2
			set medium = 3942 1
			set medium = 3943 2
			set medium = 3944 1
			set medium = 3945 2
			set medium = 3946 1
			set medium = 3947 2
			set medium = 3948 1
			set medium = 3949 2
			set medium = 3950 1
			set medium = 3951 2
			set medium = 3952 1
			set medium = 3953 2
			set medium = 3954 1
			set medium = 3955 2
			set medium = 3956 1
			set medium = 3957 2
			set medium = 3958 1
			set medium = 3959 2
			set medium = 3960 1
			set medium = 3961 2
			set medium = 3962 1
			set medium = 3963 2
			set medium = 3964 1
			set medium = 3965 2
			set medium = 3966 1
			set medium = 3967 2
			set medium = 3968 1
			set medium = 3969 2
			set medium = 3970 1
			set medium = 3971 2
			set medium = 3972 1
			set medium = 3973 2
			set medium = 3974 1
			set medium = 3975 2
			set medium = 3976 1
			set medium = 3977 2
			set medium = 3978 1
			set medium = 3979 2
			set medium = 3980 1
			set medium = 3981 2
			set medium = 3982 1
			set medium = 3983 2
			set medium = 3984 1
			set medium = 3985 2
			set medium = 3986 1
			set medium = 3987 2
			set medium = 3988 1
			set medium = 3989 2
			set medium = 3990 1
			set medium = 3991 2
			set medium = 3992 1
			set medium = 3993 2
			set medium = 3994 1
			set medium = 3995 2
			set medium = 3996 1
			set medium = 3997 2
			set medium = 3998 1
			set medium = 3999 2
			set medium = 4000 1
			set medium = 4001 2
			set medium = 4002 1
			set medium = 4003 2
			set medium = 4004 1
			set medium = 4005 2
			set medium = 4006 1
			set medium = 4007 2
			set medium = 4008 1
			set medium = 4009 2
			set medium = 4010 1
			set medium = 4011 2
			set medium = 4012 1
			set medium = 4013 2
			set medium = 4014 1
			set medium = 4015 2
			set medium = 4016 1
			set medium = 4017 2
			set medium = 4018 1
			set medium = 4019 2
		:stop media input:
	:stop geometry:
	############################################
	:start geometry:
		name        = planes
		library     = egs_planes
		type        = EGS_Yplanes
		positions   = -0.045 0 0.045
        # No media required
	:stop geometry:

	:start geometry:
		name        = SI_Cylinder
		library     = egs_cylinders
		type        = EGS_YCylinders
		radii       = 0.087
		:start media input:
			media = SI521ICRU
			set medium = 1 0
		:stop media input:
	:stop geometry:

	:start geometry:
		name        = POLY_Cylinder
		library     = egs_cylinders
		type        = EGS_YCylinders
		radii       = 0.087
		:start media input:
			media = POLYSTY521ICRU
			set medium = 1 0
		:stop media input:
	:stop geometry:

    # The composite geometry
	:start geometry:
		name            = sample
		library         = egs_cdgeometry
		base geometry   = planes
		# set geometry = 1 geom means:
		# "in region 1 of the basegeometry, use geometry "geom"
		set geometry   = 0 SI_Cylinder
		set geometry   = 1 POLY_Cylinder
        	# The final region numbers are attributed by the cd geometry object;
        	# Use the viewer to determine region numbers
	:stop geometry:

	:start geometry:
		name        = Shifted_Sample
		library     = egs_gtransformed
		my geometry = sample
		:start transformation:
			translation = 0 0 0.09
			#rotation    = 0.5 0 -1
			## rotation is first!
		:stop transformation:
	:stop geometry:

	############################################
	# start Envelope containing everything
	###########################################

	:start geometry:
		library = egs_ndgeometry
		type = EGS_XYZGeometry
		name = base
		x-planes= -0.101 0.101
		y-planes= -0.051 0.051
		z-planes= -0.250 2.42216
		:start media input:
			media = AIR521ICRU
			set medium = 1 0
		:stop media input:
	:stop geometry:

	:start geometry:
		library = egs_genvelope
		name = simuGeom
		base geometry = base
		inscribed geometries = Grating Shifted_Sample
	:stop geometry:
	###########################################
	# stop Envelope containing everything
	###########################################

	simulation geometry = simuGeom
:stop geometry definition:

###############################################
###############################################
##					     ##
##		source           	     ##
##					     ##
###############################################
###############################################
:start source definition:
	:start source:
		library = egs_parallel_beam
		 name = PerfectPlaneWaveSource
		:start shape:
		library = egs_rectangle
		rectangle = -0.100 -0.05 0.1 0.05
		:stop shape:
			direction 0 0 1
			charge = 0
		:start spectrum:
			type = monoenergetic
			energy = 0.02
		:stop spectrum:
	:stop source:

	 :start source:
		library = egs_transformed_source
		name = TransformedPlaneWaveSource
		source name = PerfectPlaneWaveSource
		:start transformation:
			translation = 0 0 -0.249
		:stop transformation:
	:stop source:

	simulation source = TransformedPlaneWaveSource
:stop source definition:
###############################################
###############################################
##					     ##
##		Transport parameters         ##
##					     ##
###############################################
###############################################

:start MC transport parameter:

	 Global ECUT = 1.0
	# Global PCUT = 0.02

:stop MC transport parameter:
###############################################
###############################################
##					     ##
##		run control		     ##
##					     ##
###############################################
###############################################

:start run control:
	 ncase = 3000000#100000
:stop run control:
###############################################
###############################################
##					     ##
##		Random Number Generator      ##
##					     ##
###############################################
###############################################
:start rng definition:
	type = ranmar
	initial seeds = 97 42
:stop rng definition:

###############################################
###############################################
##					     ##
##		Splitting algorithm	     ##
##                      		     ##
###############################################
###############################################
:start splitting algorithm definition:
	:start splitting algorithm:
		type = DefaultSplittingAlgorithm
		setup = PhaseGrating detector1
		source coherence = coherent # incoherent coherent
	:stop splitting algorithm:

	:start optical element:
		name = PhaseGrating
		type = FourierSeriesZPlane
		position = 0.0025
		phase shift at design energy = 1.0 #in units of pi
		duty cycle = 0.5
		periodicity = 0.0002 #in [cm]
		highest fourier order = 5
		design energy = 0.020
		Epsilon = 0.000001
		model attenuation = 0 #0 false; 1 true
		medium A = SI521ICRU
		medium B = AIR521ICRU
		grating thickness = 0.0025
		norm at design energy = 1.0 1.0 #if constant set for a , b sections: >= 0
		direction correction = 0 #0 false; 1 true
	:stop optical element:

	:start optical element:
	 name = detector1
	 type = DetectorZPlane
	 total signal pixels = 20000 10000
	 position = -0.1 -0.05 2.42216
	 height = 0.1
	 width = 0.2
	 write to binary = 1
	 write to pgm = 0
	 count number of paths = yes
	 save at = ./PW_Cylinder_TestCases/
	 allowed to overwrite = yes
	 generate secondary signal file = yes
	 history wise normalization = yes
 :stop optical element:

:stop splitting algorithm definition:
